OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2+git)
Comment
  Spatial Filter compute average across all electrodes
Comment
  Compute index of focusing visual attention as : beta_power / (alpha_power + theta power)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Index
Data=#1 -> Signal display "Raw Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Beta Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter => #7
  Spatial Filter Coefficients =
  Number of Output Channels = 8
  Number of Input Channels = 1
  Filter matrix file = 8chansmean.txt
-> Epoch average => #8
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#7 -> Signal display "Mean beta"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Alpha Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter => #14
  Spatial Filter Coefficients =
  Number of Output Channels = 8
  Number of Input Channels = 1
  Filter matrix file = 8chansmean.txt
-> Epoch average => #15
  Averaging type = Moving epoch average
  Epoch count = 4
Data=#14 -> Signal display "Mean alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal filter => #17
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 0.5
Data=#17 -> Signal display "Filtered 1-20Hz"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Theta Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 8.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Spatial Filter => #23
  Spatial Filter Coefficients =
  Number of Output Channels = 8
  Number of Input Channels = 1
  Filter matrix file = 8chansmean.txt
-> Epoch average => #24
  Averaging type = Moving epoch average
  Epoch count = 4
Input - A=#8, Input - B=#15, Input - C=#24 -> Simple DSP "Compute Focus Indicator"
  Equation = x/(y+z)
-> Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Christof/Documents/development/JohnDoe/DevCamp2017-John-Doe/OpenVibe/OVibeSocket.py
Data=#23 -> 0xc67a01dc Signal display "Mean theta"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
