OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.3.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Time based epoching => #1
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.5
-> Univariate Statistics
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#1 -> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#3.Amplitude -> Time-frequency map display
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0xc67a01dc Python scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/Christof/Documents/development/JohnDoe/DevCamp2017-John-Doe/OpenVibe/OVibeSocket.py
  freqAccumulator = 3
  server = ws://localhost:8080
  focusAccumulator = 3
